opentrons/protocol-designer 8.4.3
schemaVersion: 8
protocolName: PCR I - 16S - 96 rx - 310325
author: Brenda Tracz
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: right}
  p20_multi_gen2: {mount: left}
labwareLocationUpdate:
  Bio-Rad 96 Well Plate 200 µL PCR (10): {loadName: biorad_96_wellplate_200ul_pcr, namespace: opentrons, version: 2, location: 6}
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 7}
  PCR I - ITS: {loadName: biorad_96_wellplate_200ul_pcr, namespace: opentrons, version: 2, location: 5}
  Placa de Mix: {loadName: usascientific_12_reservoir_22ml, namespace: opentrons, version: 1, location: 4}
  Opentrons OT-2 96 Tip Rack 20 µL (1): {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 8}
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p20_multi_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
ingredients:
  - Master Mix ITS
  - DNA Sample
  - Master Mix 16S rRNA
ingredLocations:
  Bio-Rad 96 Well Plate 200 µL PCR (10):
    DNA Sample {volume: 10}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  Placa de Mix:
    Master Mix 16S rRNA {volume: 3000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 22.5
  path: single
  changeTip: once
  aspirate_labware: Placa de Mix
  aspirate_wells: A1
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  aspirate_flowRate: 20
  dispense_labware: PCR I - ITS
  dispense_wells: A1-A12
  dispense_flowRate: 20
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: Bio-Rad 96 Well Plate 200 µL PCR (10)
  aspirate_wells: A1-A12
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  aspirate_flowRate: 5
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 2
  dispense_labware: PCR I - ITS
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 2
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 22.5, labwareId: Placa de Mix, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 20}
- dispense: {pipetteId: p300_multi_gen2, volume: 22.5, labwareId: Placa de Mix, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 20}
- aspirate: {pipetteId: p300_multi_gen2, volume: 22.5, labwareId: Placa de Mix, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 20}
- dispense: {pipetteId: p300_multi_gen2, volume: 22.5, labwareId: PCR I - ITS, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 20}
- aspirate: {pipetteId: p300_multi_gen2, volume: 22.5, labwareId: Placa de Mix, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 20}
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