opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: Teste Kai
author: Kailane
description: testando
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 8}
  Opentrons OT-2 96 Filter Tip Rack 20 µL (1): {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 9}
  USA Scientific 12 Well Reservoir 22 mL: {labwareDefURI: opentrons/usascientific_12_reservoir_22ml/1, location: 4}
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt: {labwareDefURI: opentrons/opentrons_96_wellplate_200ul_pcr_full_skirt/2, location: 1}
  Corning 24 Well Plate 3.4 mL Flat (4): {labwareDefURI: opentrons/corning_24_wellplate_3.4ml_flat/2, location: 5}
  Corning 24 Well Plate 3.4 mL Flat (1): {labwareDefURI: opentrons/corning_24_wellplate_3.4ml_flat/2, location: 2}
  Corning 24 Well Plate 3.4 mL Flat (2): {labwareDefURI: opentrons/corning_24_wellplate_3.4ml_flat/2, location: 3}
  Corning 24 Well Plate 3.4 mL Flat (3): {labwareDefURI: opentrons/corning_24_wellplate_3.4ml_flat/2, location: 6}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - Tris
  - DNA
ingredLocations:
  USA Scientific 12 Well Reservoir 22 mL:
    Tris {volume: 100}: A8
  Corning 24 Well Plate 3.4 mL Flat (4):
    DNA {volume: 25}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  Corning 24 Well Plate 3.4 mL Flat (1):
    DNA {volume: 25}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  Corning 24 Well Plate 3.4 mL Flat (2):
    DNA {volume: 25}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  Corning 24 Well Plate 3.4 mL Flat (3):
    DNA {volume: 25}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
savedStepForms:
- stepType: moveLiquid
  stepName: Transfer TRIS
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A8
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Transfer DNA_PLATE 1
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: always
  aspirate_labware: Corning 24 Well Plate 3.4 mL Flat (1)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A1-H1, A2-H2, A3-H3
  dispense_flowRate: 3.7
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Transfer DNA_PLATE 2
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: always
  aspirate_labware: Corning 24 Well Plate 3.4 mL Flat (2)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A4-H4, A5-H5, A6-H6
  dispense_flowRate: 3.7
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Transfer DNA_PLATE 3
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: always
  aspirate_labware: Corning 24 Well Plate 3.4 mL Flat (3)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A7-H7, A8-H8, A9-H9
  dispense_flowRate: 3.7
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Transfer DNA_PLATE 4
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: always
  aspirate_labware: Corning 24 Well Plate 3.4 mL Flat (4)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A10-H10, A11-H11, A12-H12
  dispense_flowRate: 3.7
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: USA Scientific 12 Well Reservoir 22 mL, wellName: A8, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: USA Scientific 12 Well Reservoir 22 mL, wellName: A8, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt, wellName: B1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: USA Scientific 12 Well Reservoir 22 mL, wellName: A8, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.7}
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